PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'one_match': 'True'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.960
      stopVal [duration (s)] = 8.5
      text = +
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    ImageComponent image
      image [set every repeat] = $image_a
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.560
      text = +
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    ImageComponent image_2
      image [set every repeat] = $image_b
      size = (0.5, 0.5)
      startVal [time (s)] = 1.760
      stopVal [duration (s)] = 0.2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [time (s)] = 9.5
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      text:
        X        X          X


        X        X          X


        X        X          X
    KeyboardComponent key_resp
      allowedKeys = '1','0'
      forceEndRoutine = False
      startVal [time (s)] = 1.760
      stopVal [duration (s)] = 8
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  Routine fixation
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.5
      text = +
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [time (s)] = 7.5
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      text:
        X        X          X


        X        X          X


        X        X          X
  Routine practice_trial_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 1.960
      stopVal [duration (s)] = 8.5
      text = +
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    ImageComponent image_3
      image [set every repeat] = $image_a
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.560
      text = +
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    ImageComponent image_4
      image [set every repeat] = $image_b
      size = (0.5, 0.5)
      startVal [time (s)] = 1.760
      stopVal [duration (s)] = 0.2
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [time (s)] = 9.5
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      text:
        X        X          X


        X        X          X


        X        X          X
    KeyboardComponent key_resp_2
      allowedKeys = '1','0'
      forceEndRoutine = False
      startVal [time (s)] = 1.760
      stopVal [duration (s)] = 8
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  Routine experiment_start
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment will now start.

        Press any key when you are ready to begin.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"In this experiment you will respond after viewing a pair of images. Once you see the second image, press " + ('0' if expInfo['one_match'] else "1") +" if the images did not match and "+('1' if expInfo['one_match'] else '0') +" if the images matched. Respond as quickly as possible."+"\n\nWhen you see a grid of x's you can blink/move your eyes, but remain as still as possible and do not blink otherwise."+"\n\nPress any key to start some practice trials."
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine fixation
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = stimuli/practice_pairs.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image_a', 'stimuli/images/003 .bmp'), ('image_b', 'stimuli/images/021 .bmp'), ('name_a', 'Alligator'), ('name_b', 'Bear'), ('category_a', 'four_footed_animal'), ('category_b', 'four_footed_animal'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/027 .bmp'), ('image_b', 'stimuli/images/028 .bmp'), ('name_a', 'Bicycle'), ('name_b', 'Bird'), ('category_a', 'vehicle'), ('category_b', 'bird'), ('matching', False)])]
    Routine practice_trial_2
  LoopTerminator practice_trials
  Routine experiment_start
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli/pairs.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image_a', 'stimuli/images/003 .bmp'), ('image_b', 'stimuli/images/021 .bmp'), ('name_a', 'Alligator'), ('name_b', 'Bear'), ('category_a', 'four_footed_animal'), ('category_b', 'four_footed_animal'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/016 .bmp'), ('image_b', 'stimuli/images/006 .bmp'), ('name_a', 'Banana'), ('name_b', 'Apple'), ('category_a', 'fruit'), ('category_b', 'fruit'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/027 .bmp'), ('image_b', 'stimuli/images/028 .bmp'), ('name_a', 'Bicycle'), ('name_b', 'Bird'), ('category_a', 'vehicle'), ('category_b', 'bird'), ('matching', False)]),
      OrderedDict([('image_a', 'stimuli/images/045 .bmp'), ('image_b', 'stimuli/images/072 .bmp'), ('name_a', 'Cannon'), ('name_b', 'Desk'), ('category_a', 'weapon'), ('category_b', 'furniture'), ('matching', False)])]
    Routine trial
  LoopTerminator trials
